OpenViBE-Scenario
Comment
  (You can add comments by pressing the C key)
Comment
  Artificial EEG+ERP generation with Python boxes
Comment
  Spectrogram
Comment
  Calculation of average signal for Target / Non-Target

Target/Non-target stimulator => #0
  Clock frequency (Hz) = 1
  Script = ${Player_ScenarioDirectory}/scripts/random_stimulator.py
  Target stimulation label = OVTK_StimulationId_Target
  Non-Target stimulation label = OVTK_StimulationId_NonTarget
  Target probability = 0.25
-> Identity => #1
EEG generator => #2
  Clock frequency (Hz) = 16
  Script = ${Player_ScenarioDirectory}/scripts/eeg_generator.py
  Number of channels = 19
  Samples per epoch = 32
EEG=#2, Stimulation=#0 -> ERP generator => #3
  Clock frequency (Hz) = 16
  Script = ${Player_ScenarioDirectory}/scripts/erp_aggregator.py
  Target stimulation label = OVTK_StimulationId_Target
  Non-Target stimulation label = OVTK_StimulationId_NonTarget
Data=#3, Stimulations=#0 -> Signal display "Artificial EEG"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> 0xc67a01dc Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> 0xc67a01dc Hamming
  Window method = Hamming
-> 0xc67a01dc Spectral analysis (FFT) => #7
  Spectral components = Amplitude
#7.Amplitude -> 0xc67a01dc Epoch average
  Averaging type = Cumulative average
  Epoch count = 4
-> 0xc67a01dc Channel spectra
  Minimum frequency to display = 0
  Maximum frequency to display = 128
#3 -> Identity => #10
Input signal=#10, Input stimulations=#1 -> Stimulation based epoching "Target epochs" => #11
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
#11.Epoched signal -> Epoch average
  Averaging type = Cumulative average
  Epoch count = 100
-> Signal average => #13
  Clock frequency (Hz) = 60
  Script = ${Player_ScenarioDirectory}/scripts/python-signal-average.py
Data=#13 -> Signal display "Average Signal (Target)"
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 1
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#10, Input stimulations=#1 -> Stimulation based epoching "Non-Target epochs" => #15
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#15.Epoched signal -> Epoch average
  Averaging type = Cumulative average
  Epoch count = 100
-> Signal average => #17
  Clock frequency (Hz) = 60
  Script = ${Player_ScenarioDirectory}/scripts/python-signal-average.py
Data=#17 -> Signal display "Average Signal (Non Target)"
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 1
  Bottom ruler = true
  Left ruler = false
  Multiview = false
